CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:49
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Date>.*[_V].*)$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "FITC") (file does contain ".tif")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI") (file does contain ".tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3") (file does contain ".tif")
    Name to assign these images:GFAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:GFAP
    Name the output image:IllumGFAP
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DAPI
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DAPI
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:GFAP
    Name the output image:CorrGFAP
    Select the illumination function:IllumGFAP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:CorrBlue
    Name the output image:IllumBlue2
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrGFAP
    Name the primary objects to be identified:identifiedGFAP
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.065,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.018,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Minimum Cross-Entropy

OverlayObjects:[module_num:11|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
    Input:CorrBlue
    Name the output image:OverlayObjectsNuclei
    Objects:Nuclei
    Opacity:1

SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_Images\\Cellprofiler
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:13|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
    Parent objects:Nuclei
    Child objects:identifiedGFAP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei
    Name the output objects:GFAP_W_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_identifiedGFAP_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureColocalization:[module_num:15|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
    Select images to measure:CorrBlue, CorrGFAP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:GFAP_W_nuclei, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CorrBlue, CorrGFAP
    Select objects to measure:GFAP_W_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:GFAP_W_nuclei, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:18|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
    Select images to measure:CorrBlue, CorrGFAP
    Select objects to measure:GFAP_W_nuclei, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

RelateObjects:[module_num:19|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
    Parent objects:Nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:20|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|Desktop\\IHC for paper\\Keep - 07.09.2023 GFP Distribution for paper_brain_GFAP_GFP_DAPIx20\\CellProfiler\\Final data\\2. Cellprofiler - GFAP in brain\\Rerun05.01
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:BrainGFAPonly.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CorrectIlluminationCalculate:[module_num:21|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
    Select the input image:GFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:22|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
    Select the input image:GFP
    Name the output image:CorrGFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:CorrGFP
    Name the primary objects to be identified:GFPpos_MN
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.388
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.125,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:24|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
    Parent objects:Nuclei
    Child objects:GFPpos_MN
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureColocalization:[module_num:25|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
    Select images to measure:CorrBlue, CorrGFP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:GFPpos_MN, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CorrBlue, CorrGFP
    Select objects to measure:GFPpos_MN, Nuclei

MeasureObjectSizeShape:[module_num:27|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
    Select object sets to measure:GFPpos_MN, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:28|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
    Select images to measure:CorrBlue
    Select objects to measure:GFPpos_MN, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

RelateObjects:[module_num:29|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
    Parent objects:GFPpos_MN
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:30|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|Desktop\\IHC for paper\\Keep - 07.09.2023 GFP Distribution for paper_brain_GFAP_GFP_DAPIx20\\CellProfiler\\Final data\\1. Cellprofiler - GFP in brain\\08.01
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:BrainGFPonly.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ClassifyObjects:[module_num:31|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:2
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:DAPI_GFAP
    Name the output objects:ClassifiedGFAPDAPI
    Select a class:GFAP
    Name the output objects:ClassifiedGFAP
    Select the object name:Nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler-Analyst-GFAP
    Rules or classifier file name:Brain_GFAP_CP-A-GFAP.model
    Allow fuzzy feature matching?:Yes

OverlayObjects:[module_num:32|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enabled:False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
    Input:CorrGFAP
    Name the output image:OverlayGFAP
    Objects:ClassifiedGFAP
    Opacity:0.5

RelateObjects:[module_num:33|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
    Parent objects:ClassifiedGFAP
    Child objects:identifiedGFAP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:34|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
    Select the objects to filter:identifiedGFAP
    Name the output objects:FilterGFAPclassified
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Parent_ClassifiedGFAP
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
SplitOrMergeObjects:[module_num:35|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
    Select the input objects:FilterGFAPclassified
    Name the new objects:RelabeledNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
OverlayObjects:[module_num:36|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
    Input:CorrGFAP
    Name the output image:ClassifiedGFAPoverlay
    Objects:RelabeledNuclei
    Opacity:0.2

OverlayOutlines:[module_num:37|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrGFAP
    Name the output image:OrigOverlayGFAP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:RelabeledNuclei

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:ClassifiedGFAPoverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GFAPP
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_Images\\Cellprofiler
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrGFAP
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GFA
P
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_Images\\Cellprofiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ClassifyObjects:[module_num:40|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:2
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:GFPpos
    Name the output objects:ClassifiedGFP
    Select a class:DAPI_GFP
    Name the output objects:ClassifiedGFPDAPI
    Select the object name:Nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler-Analyst-GFP
    Rules or classifier file name:Brain_GFAP_CP-A-GFP.model
    Allow fuzzy feature matching?:Yes

OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrGFP
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#04FB29
    Select objects to display:ClassifiedGFP
    Select outline color:#1C02FD
    Select objects to display:ClassifiedGFPDAPI

OverlayObjects:[module_num:42|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
    Input:CorrGFP
    Name the output image:ClassifiedGFPoverlay
    Objects:ClassifiedGFP
    Opacity:1

SaveImages:[module_num:43|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ClassifiedGFPoverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Images for analysis\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_Images\\Cellprofiler
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:44|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
    Parent objects:ClassifiedGFP
    Child objects:GFPpos_MN
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:45|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
    Select the objects to filter:GFPpos_MN
    Name the output objects:FilterGFPclassified
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Parent_ClassifiedGFP
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrGFP
    Name the output image:OrigOverlayGFPoutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ClassifiedGFP

ClassifyObjects:[module_num:47|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
    Make classification decision based on:Pair of measurements
    Hidden:1
    Hidden:2
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:GFAP
    Name the output objects:ClassifiedGFAP
    Select a class:DAPI
    Name the output objects:ClassifiedDAPIGFAPneg
    Select the object name:Nuclei
    Select the first measurement:Children_ClassifiedGFP_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:1
    Select the second measurement:Children_ClassifiedGFAP_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:1
    Use custom names for the bins?:Yes
    Enter the low-low bin name:DAPIonly
    Enter the low-high bin name:GFAPonly
    Enter the high-low bin name:GFPonly
    Enter the high-high bin name:Colocalized
    Retain an image of the classified objects?:Yes
    Enter the image name:Classifiedcolocalised
    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Default Input Folder sub-folder|Desktop\\IHC for paper\\Keep - 07.09.2023 GFP Distribution for paper_brain_GFAP_GFP_DAPIx20\\CellProfiler\\Final, 01.11\\BrainGFAPonly
    Rules or classifier file name:BrainGFAPonlymodelFGB.model
    Allow fuzzy feature matching?:Yes

SaveImages:[module_num:48|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Classifiedcolocalised
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Classifiedcolocalised_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:49|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notes:['WHatstheproblem']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\IHC for paper\\CellProfiler Analysis GFAP\\Brain\\Brain_GFAP_CellProfiler_rawdata
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Classify_DAPIonly_NumObjectsPerBin,Image|Classify_GFAPonly_NumObjectsPerBin,Image|Classify_GFPonly_NumObjectsPerBin,Image|Classify_Colocalized_NumObjectsPerBin
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Brain_GFAP_raw_data
    Overwrite existing files without warning?:No
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